CellProfiler Pipeline: http://www.cellprofiler.org
Version:2
DateRevision:20120216200413

LoadImages:[module_num:1|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notes:['Load the test prediction generated from the machine learning together with the test image. The test image is only used for visualization.']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
    File type to be loaded:tif,tiff,flex,zvi movies
    File selection method:Text-Exact match
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    Analyze all subfolders within the selected folder?:None
    Input image file location:Default Input Folder|None
    Check image sets for unmatched or duplicate files?:Yes
    Group images by metadata?:No
    Exclude certain files?:No
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    Image count:2
    Text that these images have in common (case-sensitive):test_prediction.tif
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    Extract metadata from where?:None
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    Channel count:1
    Group the movie frames?:No
    Grouping method:Interleaved
    Number of channels per group:3
    Load the input as images or objects?:Images
    Name this loaded image:prediction
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    Channel number:1
    Rescale intensities?:Yes
    Text that these images have in common (case-sensitive):test_volume
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    Extract metadata from where?:None
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    Channel count:1
    Group the movie frames?:No
    Grouping method:Interleaved
    Number of channels per group:3
    Load the input as images or objects?:Images
    Name this loaded image:image
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    Channel number:1
    Rescale intensities?:Yes

ApplyThreshold:[module_num:2|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notes:['Threshold the prediction pretty heavily in order to over-segment it. This initial segmentation is used to find many putative centers of tissue surrounded by membrane']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
    Select the input image:prediction
    Name the output image:BinaryPrediction
    Select the output image type:Binary (black and white)
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    Select the thresholding method:Manual
    Manual threshold:0.5
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
Crop:[module_num:3|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notes:['This cropping step draws a rectangle around the edge of the image and helps force the distance transform off from the edge of the image.']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
    Select the input image:BinaryPrediction
    Name the output image:CroppedBinaryPrediction
    Select the cropping shape:Rectangle
    Select the cropping method:Coordinates
    Apply which cycle's cropping pattern?:Every
    Left and right rectangle positions:1,-1
    Top and bottom rectangle positions:1,-1
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    Remove empty rows and columns?:No
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
Morph:[module_num:4|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notes:['Take the distance transform of the binary. The maxima in this are points furthest away from the membrane. Before doing so, erase little blobs in the segmentation. An alternative might be an opening operation...']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
    Select the input image:CroppedBinaryPrediction
    Name the output image:DistanceTransformPrediction
    Select the operation to perform:open
    Number of times to repeat operation:Once
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    Scale:5.0
    Select the operation to perform:close
    Number of times to repeat operation:Once
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    Scale:5.0
    Select the operation to perform:fill small holes
    Number of times to repeat operation:Once
    Maximum hole area:200
    Scale:3
    Select the operation to perform:distance
    Number of times to repeat operation:Once
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    Scale:3

Smooth:[module_num:5|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notes:['Smooth the distance transform to help remove double peaks.']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
    Select the input image:DistanceTransformPrediction
    Name the output image:SmoothedDistanceTransform
    Select smoothing method:Gaussian Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter, in  pixels:6.0
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
Morph:[module_num:6|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notes:["This is the first step in finding local maxima. Typically, you'd use IdentifyPrimaryObjects which does this maxima finding step, but I've done it explicitly to have more control and to be able to over-segment. Perform a grayscale dilation. Any point whose value is the same as its grayscale dilation is a maximum."]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
    Select the input image:SmoothedDistanceTransform
    Name the output image:DilatedPrediction
    Select the operation to perform:dilate
    Number of times to repeat operation:Once
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    Scale:8.0

ImageMath:[module_num:7|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notes:['Subtract the original from the dilated. Any point at zero should be a local maximum. We multiply by -500, so any non-maximal point will be negative']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
    Operation:Subtract
    Raise the power of the result by:1
    Multiply the result by:-500.0
    Add to result:0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:Yes
    Name the output image:InvLocalPredictionMaxima
    Image or measurement?:Image
    Select the first image:SmoothedDistanceTransform
    Multiply the first image by:1
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    Image or measurement?:Image
    Select the second image:DilatedPrediction
    Multiply the second image by:1
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
ImageMath:[module_num:8|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notes:['Invert the image so that zero becomes 1.']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
    Operation:Invert
    Raise the power of the result by:1
    Multiply the result by:1
    Add to result:0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:LocalPredictionMaxima
    Image or measurement?:Image
    Select the first image:InvLocalPredictionMaxima
    Multiply the first image by:1
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    Image or measurement?:Image
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
ApplyThreshold:[module_num:9|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notes:["The distance transform is at a local maximum when it's zero for areas larger than the dilation. Don't pick up any points where the distance transform is zero (inside the membrane)."]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
    Select the input image:DistanceTransformPrediction
    Name the output image:NonzeroDistanceTransform
    Select the output image type:Binary (black and white)
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    Select the thresholding method:Manual
    Manual threshold:0.00001
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
ImageMath:[module_num:10|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notes:['Multiplying an image by a binary image produced by ApplyThresholded masks all points below threshold, setting their value to zero.']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
    Operation:Multiply
    Raise the power of the result by:1
    Multiply the result by:1
    Add to result:0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:MaskedLocalMaxima
    Image or measurement?:Image
    Select the first image:LocalPredictionMaxima
    Multiply the first image by:1
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    Image or measurement?:Image
    Select the second image:NonzeroDistanceTransform
    Multiply the second image by:1
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
ApplyThreshold:[module_num:11|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notes:['Threshold - this is a trivial conversion of a numeric image to a binary one.']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
    Select the input image:MaskedLocalMaxima
    Name the output image:LocalMaximaBinary
    Select the output image type:Binary (black and white)
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    Select the thresholding method:Manual
    Manual threshold:0.4999
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
GrayToColor:[module_num:12|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notes:["This is a handy display where you can interactively composite one image against another. It's useful to make sure your local maxima are good."]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
    Select a color scheme:RGB
    Select the input image to be colored red:MaskedLocalMaxima
    Select the input image to be colored green:SmoothedDistanceTransform
    Select the input image to be colored blue:NonzeroDistanceTransform
    Name the output image:ColorImage
    Relative weight for the red image:1
    Relative weight for the green image:1
    Relative weight for the blue image:1
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
IdentifyPrimaryObjects:[module_num:13|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notes:['This just turns the maxima into "objects" which can then be used to seed the watershed in IdentifySecondaryObjects.']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
    Select the input image:LocalMaximaBinary
    Name the primary objects to be identified:LocalMaxima
    Typical diameter of objects, in pixel units (Min,Max):4,10
    Discard objects outside the diameter range?:No
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:No
    Select the thresholding method:Binary image
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    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:No
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    Select binary image:LocalMaximaBinary
    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Continue
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
IdentifySecondaryObjects:[module_num:14|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notes:["Here's the big workhorse. IdentifySecondary thresholds the prediction. It then uses the seeds from IdentifyPrimary to perform a seeded watershed. We use the predicted locations of the membrane as saddle points which divide the watershed. The result is over-segmented with shallow saddles improperly breaking tissue not separated by membrane."]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
    Select the input objects:LocalMaxima
    Name the objects to be identified:Segmentation
    Select the method to identify the secondary objects:Watershed - Image
    Select the input image:prediction
    Select the thresholding method:Manual
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    Name the outline image:SecondaryOutlines
    Manual threshold:0.5
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    Retain outlines of the identified secondary objects?:Yes
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    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
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
EMCleanup:[module_num:15|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notes:['This is a custom module I wrote for the challenge. The big thing is to join objects if there is not enough evidence to separate them. There is a description of a similar technique in "Combining intensity, edge and shape information for 2D and 3D segmentation of cell nuclei in tissue sections", Wahlby, Journal of Microscopy Vol 215 Pt 1 July 2004, pp 67-76.', 'The module also draws single-pixel dividers between touching objects which is needed to conform to the challenge. It removes objects that are uniformly very dark and small objects. These are artifacts which my pixel classifier fails to classify properly.']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
    Prediction image::prediction
    Input image::image
    Input segmentation::Segmentation
    Output segmentation::CleanedSegmentation
    Dark cutoff::0.3
    Minimum object area::30
    Minimum support::0.375
    Minimum border between objects::5
    Outlines name::CleanedOutlines

OverlayOutlines:[module_num:16|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notes:['Display the image with the original segmentation and the final one after cleanup.']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
    Display outlines on a blank image?:No
    Select image on which to display outlines:image
    Name the output image:ImageOverlay
    Select outline display mode:Color
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    Width of outlines:1
    Select outlines to display:SecondaryOutlines
    Select outline color:Red
    Select outlines to display:CleanedOutlines
    Select outline color:Green

OverlayOutlines:[module_num:17|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notes:['Display the prediction and overlays']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
    Display outlines on a blank image?:No
    Select image on which to display outlines:prediction
    Name the output image:PredictionOverlay
    Select outline display mode:Color
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    Width of outlines:1
    Select outlines to display:SecondaryOutlines
    Select outline color:Red
    Select outlines to display:CleanedOutlines
    Select outline color:Green

ConvertObjectsToImage:[module_num:18|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notes:['Convert the segmentation to an image in preparation for saving']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
    Select the input objects:CleanedSegmentation
    Name the output image:PredictionMask
    Select the color type:Binary (black & white)
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
SaveImages:[module_num:19|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notes:['Save the prediction.']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
    Select the type of image to save:Image
    Select the image to save:PredictionMask
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    Select method for constructing file names:Sequential numbers
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    Enter file prefix:TrainPrediction
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    Select file format to use:tif
    Output file location:Default Output Folder|None
    Image bit depth:8
    Overwrite existing files without warning?:Yes
    Select how often to save:Every cycle
    Rescale the images? :No
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    Store file and path information to the saved image?:No
    Create subfolders in the output folder?:No

SaveImages:[module_num:20|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notes:['Save one of the pictures of the segmentation.']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
    Select the type of image to save:Image
    Select the image to save:ImageOverlay
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    Select method for constructing file names:Sequential numbers
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    Enter file prefix:SegmentationPicture
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    Select file format to use:tif
    Output file location:Default Output Folder|None
    Image bit depth:8
    Overwrite existing files without warning?:Yes
    Select how often to save:Every cycle
    Rescale the images? :No
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    Store file and path information to the saved image?:No
    Create subfolders in the output folder?:No
